<CompuCell3D Revision="20141124" Version="3.7.3">  
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>1000000</Steps> 
      <Temperature>10.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
       <Boundary_y>Periodic</Boundary_y> 
       <Boundary_x>Periodic</Boundary_x> 
   </Potts>
   

<Plugin Name="CellType">
   
   <!-- Listing all cell types in the simulation -->
   <CellType TypeId="0" TypeName="Medium"/>
   <CellType TypeId="1" TypeName="Stem"/>
   <CellType TypeId="2" TypeName="Somatic"/>
   <CellType TypeId="3" TypeName="Necrotic"/>
</Plugin>
  
   
    <Plugin Name="Volume">
    </Plugin>
    
    <Metadata>
    <NumberOfProcessors>4</NumberOfProcessors>
    <DebugOutputFrequency>300</DebugOutputFrequency>
    </Metadata>

   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>

<Plugin Name="Contact">
   <!-- Specification of adhesion energies -->
   <Energy Type1="Medium" Type2="Medium">20.0</Energy>
   <Energy Type1="Medium" Type2="Stem">15.0</Energy>
   <Energy Type1="Medium" Type2="Somatic">20.0</Energy>
   <Energy Type1="Medium" Type2="Necrotic">20.0</Energy>
   <Energy Type1="Stem" Type2="Stem">15.0</Energy>
   <Energy Type1="Stem" Type2="Somatic">15.0</Energy>
   <Energy Type1="Stem" Type2="Necrotic">15.0</Energy>
   <Energy Type1="Somatic" Type2="Somatic">15.0</Energy>
   <Energy Type1="Somatic" Type2="Necrotic">15.0</Energy>
   <Energy Type1="Necrotic" Type2="Necrotic">10.0</Energy>
   <NeighborOrder>3</NeighborOrder>
</Plugin>





 <Plugin Name="BoundaryPixelTracker">
    <NeighborOrder>1</NeighborOrder>
 </Plugin>


   
   
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="125" y="125" z="0"/>
         <Radius>20</Radius>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>Stem</Types>
      </Region>
   </Steppable>
   
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="Glucose">
         <DiffusionData>
            <FieldName>Glucose</FieldName>
            <GlobalDiffusionConstant>4</GlobalDiffusionConstant>
            <GlobalDecayConstant>.01</GlobalDecayConstant>
         </DiffusionData>
         
         <SecretionData> 
            <Secretion Type="Medium">0.1</Secretion>
         </SecretionData>
      </DiffusionField>
   </Steppable>

</CompuCell3D>
